CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:39
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "slice")
    Name to assign these images:SuperresMulti
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:SuperresMulti
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:2
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    Image name:C2Processed
    Channel number:1
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    Image name:WgGFP

ColorToGray:[module_num:6|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enabled:False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
    Select the input image:RawMulti
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:WgRaw
    Channel number:2
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    Image name:C2Raw

SaveImages:[module_num:7|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:WgGFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:Multichannel
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:ChannelOG
    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (The Francis Crick)/Ines Lab Data/microscope/analysis/dunn school sora ring analysis/cell profiler ring test_4
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:WgGFP
    Name the primary objects to be identified:PrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):2,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.004,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
OverlayObjects:[module_num:9|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
    Input:WgGFP
    Name the output image:OverlayPrimaryObjects
    Objects:PrimaryObjects
    Opacity:0.3

SaveImages:[module_num:10|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OverlayPrimaryObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:Multichannel
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:PrimaryObjects
    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (The Francis Crick)/Ines Lab Data/microscope/analysis/dunn school sora ring analysis/cell profiler ring test_4
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SplitOrMergeObjects:[module_num:11|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
    Select the input objects:PrimaryObjects
    Name the new objects:merged
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
OverlayObjects:[module_num:12|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
    Input:WgGFP
    Name the output image:OverlayMergedObjects
    Objects:merged
    Opacity:0.3

SaveImages:[module_num:13|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OverlayMergedObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:Multichannel
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:MergedObjects
    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (The Francis Crick)/Ines Lab Data/microscope/analysis/dunn school sora ring analysis/cell profiler ring test_4
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:merged
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

FilterObjects:[module_num:15|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
    Select the objects to filter:merged
    Name the output objects:AreaFilt
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:AreaRmv
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:80
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.75

MeasureObjectIntensityDistribution:[module_num:16|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
    Select images to measure:WgGFP
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes only
    Maximum zernike moment:9
    Select objects to measure:AreaFilt
    Object to use as center?:These objects
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    Scale the bins?:No
    Number of bins:5
    Maximum radius:20

FilterObjects:[module_num:17|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
    Select the objects to filter:AreaFilt
    Name the output objects:RadialFilt
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:5
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:RadialRmvd
    Select the measurement to filter by:RadialDistribution_ZernikeMagnitude_WgGFP_1_1
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.05
    Select the measurement to filter by:RadialDistribution_MeanFrac_WgGFP_1of5
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.32
    Select the measurement to filter by:RadialDistribution_MeanFrac_WgGFP_2of5
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:RadialDistribution_RadialCV_WgGFP_1of5
    Filter using a minimum measurement value?:Yes
    Minimum value:0.035
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:RadialDistribution_MeanFrac_WgGFP_Overflow
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0

ConvertObjectsToImage:[module_num:18|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
    Select the input objects:RadialFilt
    Name the output image:RadialFiltMask
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:19|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
    Select the input objects:RadialRmvd
    Name the output image:RadialRmvdMask
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:RadialFiltMask
    Select method for constructing file names:From image filename
    Select image name for file prefix:SuperresMulti
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:RadialFiltMask
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Dropbox (The Francis Crick)/Ines Lab Data/microscope/analysis/dunn school sora ring analysis/GOLLUM/Masks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:RadialRmvdMask
    Select method for constructing file names:From image filename
    Select image name for file prefix:SuperresMulti
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:RadialRmvdMask
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Dropbox (The Francis Crick)/Ines Lab Data/microscope/analysis/dunn school sora ring analysis/GOLLUM/Masks
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensityDistribution:[module_num:22|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enabled:False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
    Select images to measure:WgGFP
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes only
    Maximum zernike moment:9
    Select objects to measure:RadialFilt
    Object to use as center?:These objects
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    Scale the bins?:No
    Number of bins:5
    Maximum radius:20

MeasureObjectSizeShape:[module_num:23|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enabled:False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
    Select object sets to measure:RadialFilt
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

ExportToSpreadsheet:[module_num:24|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:RadialFilt|AreaShape_NormalizedMoment_0_0,RadialFilt|AreaShape_NormalizedMoment_0_1,RadialFilt|AreaShape_NormalizedMoment_0_3,RadialFilt|AreaShape_NormalizedMoment_0_2,RadialFilt|AreaShape_NormalizedMoment_3_2,RadialFilt|AreaShape_NormalizedMoment_3_0,RadialFilt|AreaShape_NormalizedMoment_3_3,RadialFilt|AreaShape_NormalizedMoment_3_1,RadialFilt|AreaShape_NormalizedMoment_1_2,RadialFilt|AreaShape_NormalizedMoment_1_1,RadialFilt|AreaShape_NormalizedMoment_1_0,RadialFilt|AreaShape_NormalizedMoment_1_3,RadialFilt|AreaShape_NormalizedMoment_2_3,RadialFilt|AreaShape_NormalizedMoment_2_1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_4_1to7_1
    Overwrite existing files without warning?:Yes
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
MeasureObjectIntensity:[module_num:25|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enabled:False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
    Select images to measure:WgRaw, C2Raw
    Select objects to measure:RadialFilt

OverlayOutlines:[module_num:26|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:WgGFP
    Name the output image:OrigOverlayNew
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF0000
    Select objects to display:AreaRmv
    Select outline color:#FFFF0A
    Select objects to display:RadialRmvd
    Select outline color:#66CCFF
    Select objects to display:RadialFilt

OverlayOutlines:[module_num:27|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:C2Processed
    Name the output image:OverlayC2Processed
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#CC66FF
    Select objects to display:RadialFilt

OverlayOutlines:[module_num:28|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:WgRaw
    Name the output image:OverlayWgRaw
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#CC66FF
    Select objects to display:RadialFilt

OverlayOutlines:[module_num:29|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:C2Raw
    Name the output image:OverlayC2Raw
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#CC66FF
    Select objects to display:RadialFilt

SaveImages:[module_num:30|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayNew
    Select method for constructing file names:From image filename
    Select image name for file prefix:SuperresMulti
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:FilteredObjects
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Dropbox (The Francis Crick)/Ines Lab Data/microscope/analysis/dunn school sora ring analysis/GOLLUM/FilteredObjects
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:31|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OverlayWgRaw
    Select method for constructing file names:From image filename
    Select image name for file prefix:SuperresMulti
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:RawWgChannel
    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (The Francis Crick)/Ines Lab Data/microscope/analysis/dunn school sora ring analysis/cell profiler ring test_4
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:32|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OverlayC2Raw
    Select method for constructing file names:From image filename
    Select image name for file prefix:SuperresMulti
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:RawC2
    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (The Francis Crick)/Ines Lab Data/microscope/analysis/dunn school sora ring analysis/cell profiler ring test_4
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:33|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OverlayC2Processed
    Select method for constructing file names:From image filename
    Select image name for file prefix:SuperresMulti
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:FilteredOnC2
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Dropbox (The Francis Crick)/Ines Lab Data/microscope/analysis/dunn school sora ring analysis/GOLLUM/FilteredOnC2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DisplayDataOnImage:[module_num:34|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:AreaFilt
    Measurement to display:RadialDistribution_ZernikeMagnitude_WgGFP_1_1
    Select the image on which to display the measurements:OrigOverlayNew
    Text color:#FFFF0A
    Name the output image that has the measurements displayed:ZernikeMeasured
    Font size (points):6
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):20
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:35|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:AreaFilt
    Measurement to display:RadialDistribution_MeanFrac_WgGFP_1of5
    Select the image on which to display the measurements:OrigOverlayNew
    Text color:#FECC66
    Name the output image that has the measurements displayed:FracMeasured1
    Font size (points):6
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):30
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:36|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:ZernMag1_1Filt
    Measurement to display:RadialDistribution_MeanFrac_WgGFP_2of5
    Select the image on which to display the measurements:OrigOverlayNew
    Text color:#6666FF
    Name the output image that has the measurements displayed:FracMeasured2
    Font size (points):6
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):25
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:37|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:ZernikeMeasured
    Select method for constructing file names:From image filename
    Select image name for file prefix:Multichannel
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:ZernikeMeasured
    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (The Francis Crick)/Ines Lab Data/microscope/analysis/dunn school sora ring analysis/cell profiler ring test_4
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:38|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:FracMeasured1
    Select method for constructing file names:From image filename
    Select image name for file prefix:Multichannel
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:FracMeasured1
    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (The Francis Crick)/Ines Lab Data/microscope/analysis/dunn school sora ring analysis/cell profiler ring test_4
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:39|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:FracMeasured2
    Select method for constructing file names:From image filename
    Select image name for file prefix:Multichannel
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:FracMeasured2
    Saved file format:tiff
    Output file location:Default Output Folder|Dropbox (The Francis Crick)/Ines Lab Data/microscope/analysis/dunn school sora ring analysis/cell profiler ring test_4
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
